PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = project
  keyboardBackend = ioHub
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Routines
  Routine test_1
    TextComponent test_text_1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_1
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    KeyboardComponent key_resp_1
      allowedKeys [set every repeat] = 'o','n'
      correctAns = corr_resp1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 'o' (old) if the word was present in the list of study words prior and 'n' (new) if the word was not present 
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  Routine study_1
    TextComponent study_text_1
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $study_1
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    ImageComponent visual_aid
      image [set every repeat] = visual_aid.jpg
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine study_2
    TextComponent study_text_2
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $study_2
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    ImageComponent visual_aid_2
      image = visual_aid.jpg
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine test_2
    TextComponent test_text_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_2
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'o','n'
      correctAns = corr_resp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 'o' (old) if the word was present in the list of study words prior and 'n' (new) if the word was not present 
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  Routine study_3
    ImageComponent visual_aid_3
      image = visual_aid.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent study_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $study_3
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  Routine test_3
    TextComponent test_text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_3
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'o','n'
      correctAns = corr_resp3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = Press 'o' (old) if the word was present in the list of study words prior and 'n' (new) if the word was not present 
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  Routine instructions
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions:

        A set of study words will be displayed one after the other.
        Then, another set of words will be displayed for which you need to press the 'n' key on your keyboard if the word was not present in the study words prior and the 'o' key if the word was present.

        There are 3 such sets in this experiment.

        Press the spacebar on your keyboard to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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  Routine thank_you
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank You!
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  Routine condition1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Condition 1
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    PolygonComponent fixation_1
      fillColor = white
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine condition2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Condition 2
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    PolygonComponent fixation_2
      fillColor = white
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine condition3
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Condition 3
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    PolygonComponent fixation_3
      fillColor = white
      shape = triangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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Flow
  Routine instructions
  Routine condition1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_1': 'craft'},
      {'study_1': 'taxes'},
      {'study_1': 'teeth'},
      {'study_1': 'watch'},
      {'study_1': 'money'},
      {'study_1': 'scale'},
      {'study_1': 'sleep'},
      {'study_1': 'plate'},
      {'study_1': 'movie'},
      {'study_1': 'stock'}]
    Routine study_1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_1': 'light', 'corr_resp1': 'n'},
      {'test_1': 'party', 'corr_resp1': 'n'},
      {'test_1': 'movie', 'corr_resp1': 'o'},
      {'test_1': 'scale', 'corr_resp1': 'o'},
      {'test_1': 'plate', 'corr_resp1': 'o'},
      {'test_1': 'shell', 'corr_resp1': 'n'},
      {'test_1': 'teeth', 'corr_resp1': 'o'},
      {'test_1': 'stock', 'corr_resp1': 'o'},
      {'test_1': 'watch', 'corr_resp1': 'o'},
      {'test_1': 'virus', 'corr_resp1': 'n'},
      {'test_1': 'voice', 'corr_resp1': 'n'},
      {'test_1': 'sleep', 'corr_resp1': 'o'},
      {'test_1': 'taxes', 'corr_resp1': 'o'},
      {'test_1': 'stage', 'corr_resp1': 'n'},
      {'test_1': 'sweet', 'corr_resp1': 'n'},
      {'test_1': 'shape', 'corr_resp1': 'n'},
      {'test_1': 'money', 'corr_resp1': 'o'},
      {'test_1': 'craft', 'corr_resp1': 'o'},
      {'test_1': 'round', 'corr_resp1': 'n'},
      {'test_1': 'steam', 'corr_resp1': 'n'}]
    Routine test_1
  LoopTerminator trials_2
  Routine condition2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = study_words2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_2': 'metal'},
      {'study_2': 'plane'},
      {'study_2': 'album'},
      {'study_2': 'booth'},
      {'study_2': 'laser'},
      {'study_2': 'board'},
      {'study_2': 'cream'},
      {'study_2': 'cable'},
      {'study_2': 'magic'},
      {'study_2': 'fruit'}]
    Routine study_2
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = test_words2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_2': 'house', 'corr_resp2': 'n'},
      {'test_2': 'stone', 'corr_resp2': 'n'},
      {'test_2': 'metal', 'corr_resp2': 'o'},
      {'test_2': 'board', 'corr_resp2': 'o'},
      {'test_2': 'plane', 'corr_resp2': 'o'},
      {'test_2': 'alarm', 'corr_resp2': 'n'},
      {'test_2': 'cable', 'corr_resp2': 'o'},
      {'test_2': 'album', 'corr_resp2': 'o'},
      {'test_2': 'blood', 'corr_resp2': 'n'},
      {'test_2': 'booth', 'corr_resp2': 'o'},
      {'test_2': 'cross', 'corr_resp2': 'n'},
      {'test_2': 'frame', 'corr_resp2': 'n'},
      {'test_2': 'laser', 'corr_resp2': 'o'},
      {'test_2': 'cream', 'corr_resp2': 'o'},
      {'test_2': 'fruit', 'corr_resp2': 'o'},
      {'test_2': 'motor', 'corr_resp2': 'n'},
      {'test_2': 'crown', 'corr_resp2': 'n'},
      {'test_2': 'magic', 'corr_resp2': 'o'},
      {'test_2': 'radio', 'corr_resp2': 'n'},
      {'test_2': 'chart', 'corr_resp2': 'n'}]
    Routine test_2
  LoopTerminator trials_4
  Routine condition3
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = study_words3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_3': 'apple'},
      {'study_3': 'paper'},
      {'study_3': 'tiger'},
      {'study_3': 'cloud'},
      {'study_3': 'clock'},
      {'study_3': 'snake'},
      {'study_3': 'mouse'},
      {'study_3': 'knife'},
      {'study_3': 'shark'},
      {'study_3': 'green'}]
    Routine study_3
  LoopTerminator trials_5
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = test_words3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_3': 'shirt', 'corr_resp3': 'n'},
      {'test_3': 'juice', 'corr_resp3': 'n'},
      {'test_3': 'apple', 'corr_resp3': 'o'},
      {'test_3': 'hands', 'corr_resp3': 'n'},
      {'test_3': 'paper', 'corr_resp3': 'o'},
      {'test_3': 'green', 'corr_resp3': 'o'},
      {'test_3': 'earth', 'corr_resp3': 'n'},
      {'test_3': 'tiger', 'corr_resp3': 'o'},
      {'test_3': 'cloud', 'corr_resp3': 'o'},
      {'test_3': 'glass', 'corr_resp3': 'n'},
      {'test_3': 'snake', 'corr_resp3': 'o'},
      {'test_3': 'clock', 'corr_resp3': 'o'},
      {'test_3': 'dress', 'corr_resp3': 'n'},
      {'test_3': 'mouse', 'corr_resp3': 'o'},
      {'test_3': 'chair', 'corr_resp3': 'n'},
      {'test_3': 'shark', 'corr_resp3': 'o'},
      {'test_3': 'books', 'corr_resp3': 'n'},
      {'test_3': 'knife', 'corr_resp3': 'o'},
      {'test_3': 'bread', 'corr_resp3': 'n'},
      {'test_3': 'table', 'corr_resp3': 'n'}]
    Routine test_3
  LoopTerminator trials_6
  Routine thank_you
